begin model

begin parameters
    n_flagella  5
    k_bind      0.000141149119893723
    k_nucleation 0.05
    k_completion 10.0

    k_nuc_CPLX0_3930_c  4.032832e-09
    k_nuc_CPLX0_7450_i  4.032832e-09
    k_nuc_flagellar_export_apparatus_subunit  4.032832e-09
    k_nuc_CPLX0_7451_j  4.032832e-09
    k_nuc_FLAGELLAR_MOTOR_COMPLEX_j  4.032832e-09
    k_nuc_flagellar_hook  4.032832e-09
    k_nuc_flagella  4.032832e-09

    EG10320_MONOMER_c_0  20
    EG10322_MONOMER_j_0  10
    EG10841_MONOMER_e_0  25
    EG11224_MONOMER_j_0  5
    EG11346_MONOMER_p_0  30
    EG11545_MONOMER_e_0  55
    EG11656_MONOMER_c_0  60
    EG11967_MONOMER_e_0  55
    EG11975_MONOMER_i_0  25
    EG11976_MONOMER_j_0  20
    EG11977_MONOMER_i_0  5
    FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j_0  25
    FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j_0  30
    FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j_0  25
    FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o_0  120
    FLGH_FLAGELLAR_L_RING_j_0  130
    FLGI_FLAGELLAR_P_RING_j_0  130
    FLIF_FLAGELLAR_MS_RING_i_0  170
    FLIG_FLAGELLAR_SWITCH_PROTEIN_i_0  170
    FLIM_FLAGELLAR_C_RING_SWITCH_i_0  170
    FLIN_FLAGELLAR_C_RING_SWITCH_m_0  555
    G361_MONOMER_c_0  600
    G370_MONOMER_i_0  45
    G377_MONOMER_c_0  30
    G378_MONOMER_c_0  5
    G7028_MONOMER_i_0  5
    MONOMER0_2488_c_0  10
    MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i_0  275
    MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i_0  110
end parameters

begin molecule types
    EG10320_MONOMER_c()
    EG10322_MONOMER_j()
    EG10841_MONOMER_e()
    EG11224_MONOMER_j()
    EG11346_MONOMER_p()
    EG11545_MONOMER_e()
    EG11656_MONOMER_c()
    EG11967_MONOMER_e()
    EG11975_MONOMER_i()
    EG11976_MONOMER_j()
    EG11977_MONOMER_i()
    FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j()
    FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j()
    FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j()
    FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o()
    FLGH_FLAGELLAR_L_RING_j()
    FLGI_FLAGELLAR_P_RING_j()
    FLIF_FLAGELLAR_MS_RING_i()
    FLIG_FLAGELLAR_SWITCH_PROTEIN_i()
    FLIM_FLAGELLAR_C_RING_SWITCH_i()
    FLIN_FLAGELLAR_C_RING_SWITCH_m()
    G361_MONOMER_c()
    G370_MONOMER_i()
    G377_MONOMER_c()
    G378_MONOMER_c()
    G7028_MONOMER_i()
    MONOMER0_2488_c()
    MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i()
    MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i()
    CPLX0_7450_i()
    CPLX0_7451_j()
    FLAGELLAR_MOTOR_COMPLEX_j()
    flagellar_export_apparatus_subunit()
    flagellar_hook()
    Growing_CPLX0_3930_c(EG10320_MONOMER_c~0~1~2~3~4,MONOMER0_2488_c~0~1~2)
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26~27~28~29~30~31~32~33~34,FLIG_FLAGELLAR_SWITCH_PROTEIN_i~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26~27~28~29~30~31~32~33~34,FLIM_FLAGELLAR_C_RING_SWITCH_i~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26~27~28~29~30~31~32~33~34,FLIN_FLAGELLAR_C_RING_SWITCH_m~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26~27~28~29~30~31~32~33~34~35~36~37~38~39~40~41~42~43~44~45~46~47~48~49~50~51~52~53~54~55~56~57~58~59~60~61~62~63~64~65~66~67~68~69~70~71~72~73~74~75~76~77~78~79~80~81~82~83~84~85~86~87~88~89~90~91~92~93~94~95~96~97~98~99~100~101~102~103~104~105~106~107~108~109~110~111)
    Growing_flagellar_export_apparatus_subunit(CPLX0_7450_i~0~1,EG11224_MONOMER_j~0~1,EG11975_MONOMER_i~0~1~2~3~4~5,EG11976_MONOMER_j~0~1~2~3~4,EG11977_MONOMER_i~0~1,G370_MONOMER_i~0~1~2~3~4~5~6~7~8~9,G377_MONOMER_c~0~1~2~3~4~5~6,G378_MONOMER_c~0~1,G7028_MONOMER_i~0~1)
    Growing_CPLX0_7451_j(EG11656_MONOMER_c~0~1~2~3~4~5~6~7~8~9~10~11~12,flagellar_export_apparatus_subunit~0~1)
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(CPLX0_7451_j~0~1,EG10322_MONOMER_j~0~1~2,EG11346_MONOMER_p~0~1~2~3~4~5~6,FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j~0~1~2~3~4~5,FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j~0~1~2~3~4~5~6,FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j~0~1~2~3~4~5,FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24,FLGH_FLAGELLAR_L_RING_j~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26,FLGI_FLAGELLAR_P_RING_j~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26,MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26~27~28~29~30~31~32~33~34~35~36~37~38~39~40~41~42~43~44~45~46~47~48~49~50~51~52~53~54~55,MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22)
    Growing_flagellar_hook(G361_MONOMER_c~0~1~2~3~4~5~6~7~8~9~10~11~12~13~14~15~16~17~18~19~20~21~22~23~24~25~26~27~28~29~30~31~32~33~34~35~36~37~38~39~40~41~42~43~44~45~46~47~48~49~50~51~52~53~54~55~56~57~58~59~60~61~62~63~64~65~66~67~68~69~70~71~72~73~74~75~76~77~78~79~80~81~82~83~84~85~86~87~88~89~90~91~92~93~94~95~96~97~98~99~100~101~102~103~104~105~106~107~108~109~110~111~112~113~114~115~116~117~118~119~120)
    Growing_flagella(EG10841_MONOMER_e~0~1~2~3~4~5,EG11545_MONOMER_e~0~1~2~3~4~5~6~7~8~9~10~11,EG11967_MONOMER_e~0~1~2~3~4~5~6~7~8~9~10~11,FLAGELLAR_MOTOR_COMPLEX_j~0~1,flagellar_hook~0~1)
    CPLX0_3930_c()
    flagella()
end molecule types

begin seed species
    EG10320_MONOMER_c()  EG10320_MONOMER_c_0
    EG10322_MONOMER_j()  EG10322_MONOMER_j_0
    EG10841_MONOMER_e()  EG10841_MONOMER_e_0
    EG11224_MONOMER_j()  EG11224_MONOMER_j_0
    EG11346_MONOMER_p()  EG11346_MONOMER_p_0
    EG11545_MONOMER_e()  EG11545_MONOMER_e_0
    EG11656_MONOMER_c()  EG11656_MONOMER_c_0
    EG11967_MONOMER_e()  EG11967_MONOMER_e_0
    EG11975_MONOMER_i()  EG11975_MONOMER_i_0
    EG11976_MONOMER_j()  EG11976_MONOMER_j_0
    EG11977_MONOMER_i()  EG11977_MONOMER_i_0
    FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j()  FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j_0
    FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j()  FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j_0
    FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j()  FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j_0
    FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o()  FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o_0
    FLGH_FLAGELLAR_L_RING_j()  FLGH_FLAGELLAR_L_RING_j_0
    FLGI_FLAGELLAR_P_RING_j()  FLGI_FLAGELLAR_P_RING_j_0
    FLIF_FLAGELLAR_MS_RING_i()  FLIF_FLAGELLAR_MS_RING_i_0
    FLIG_FLAGELLAR_SWITCH_PROTEIN_i()  FLIG_FLAGELLAR_SWITCH_PROTEIN_i_0
    FLIM_FLAGELLAR_C_RING_SWITCH_i()  FLIM_FLAGELLAR_C_RING_SWITCH_i_0
    FLIN_FLAGELLAR_C_RING_SWITCH_m()  FLIN_FLAGELLAR_C_RING_SWITCH_m_0
    G361_MONOMER_c()  G361_MONOMER_c_0
    G370_MONOMER_i()  G370_MONOMER_i_0
    G377_MONOMER_c()  G377_MONOMER_c_0
    G378_MONOMER_c()  G378_MONOMER_c_0
    G7028_MONOMER_i()  G7028_MONOMER_i_0
    MONOMER0_2488_c()  MONOMER0_2488_c_0
    MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i()  MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i_0
    MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i()  MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i_0
end seed species

begin observables
    Molecules  Free_EG10320_MONOMER_c  EG10320_MONOMER_c()
    Molecules  Free_EG10322_MONOMER_j  EG10322_MONOMER_j()
    Molecules  Free_EG10841_MONOMER_e  EG10841_MONOMER_e()
    Molecules  Free_EG11224_MONOMER_j  EG11224_MONOMER_j()
    Molecules  Free_EG11346_MONOMER_p  EG11346_MONOMER_p()
    Molecules  Free_EG11545_MONOMER_e  EG11545_MONOMER_e()
    Molecules  Free_EG11656_MONOMER_c  EG11656_MONOMER_c()
    Molecules  Free_EG11967_MONOMER_e  EG11967_MONOMER_e()
    Molecules  Free_EG11975_MONOMER_i  EG11975_MONOMER_i()
    Molecules  Free_EG11976_MONOMER_j  EG11976_MONOMER_j()
    Molecules  Free_EG11977_MONOMER_i  EG11977_MONOMER_i()
    Molecules  Free_FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j  FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j()
    Molecules  Free_FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j  FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j()
    Molecules  Free_FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j  FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j()
    Molecules  Free_FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o  FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o()
    Molecules  Free_FLGH_FLAGELLAR_L_RING_j  FLGH_FLAGELLAR_L_RING_j()
    Molecules  Free_FLGI_FLAGELLAR_P_RING_j  FLGI_FLAGELLAR_P_RING_j()
    Molecules  Free_FLIF_FLAGELLAR_MS_RING_i  FLIF_FLAGELLAR_MS_RING_i()
    Molecules  Free_FLIG_FLAGELLAR_SWITCH_PROTEIN_i  FLIG_FLAGELLAR_SWITCH_PROTEIN_i()
    Molecules  Free_FLIM_FLAGELLAR_C_RING_SWITCH_i  FLIM_FLAGELLAR_C_RING_SWITCH_i()
    Molecules  Free_FLIN_FLAGELLAR_C_RING_SWITCH_m  FLIN_FLAGELLAR_C_RING_SWITCH_m()
    Molecules  Free_G361_MONOMER_c  G361_MONOMER_c()
    Molecules  Free_G370_MONOMER_i  G370_MONOMER_i()
    Molecules  Free_G377_MONOMER_c  G377_MONOMER_c()
    Molecules  Free_G378_MONOMER_c  G378_MONOMER_c()
    Molecules  Free_G7028_MONOMER_i  G7028_MONOMER_i()
    Molecules  Free_MONOMER0_2488_c  MONOMER0_2488_c()
    Molecules  Free_MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i  MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i()
    Molecules  Free_MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i  MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i()
    Molecules  CPLX0_3930_c  CPLX0_3930_c()
    Molecules  CPLX0_7450_i  CPLX0_7450_i()
    Molecules  flagellar_export_apparatus_subunit  flagellar_export_apparatus_subunit()
    Molecules  CPLX0_7451_j  CPLX0_7451_j()
    Molecules  FLAGELLAR_MOTOR_COMPLEX_j  FLAGELLAR_MOTOR_COMPLEX_j()
    Molecules  flagellar_hook  flagellar_hook()
    Molecules  flagella  flagella()
    Molecules  Growing_CPLX0_3930_c_total  Growing_CPLX0_3930_c()
    Molecules  Growing_CPLX0_7450_i_total  Growing_CPLX0_7450_i()
    Molecules  Growing_flagellar_export_apparatus_subunit_total  Growing_flagellar_export_apparatus_subunit()
    Molecules  Growing_CPLX0_7451_j_total  Growing_CPLX0_7451_j()
    Molecules  Growing_FLAGELLAR_MOTOR_COMPLEX_j_total  Growing_FLAGELLAR_MOTOR_COMPLEX_j()
    Molecules  Growing_flagellar_hook_total  Growing_flagellar_hook()
    Molecules  Growing_flagella_total  Growing_flagella()
end observables

begin reaction rules

    # === flhDC ===
    # Product: CPLX0-3930[c]
    # Subunits: 4x EG10320-MONOMER[c], 2x MONOMER0-2488[c]
    # Nucleation (rate scaled by 1/total_subunits)
    MONOMER0_2488_c() + MONOMER0_2488_c() -> Growing_CPLX0_3930_c(EG10320_MONOMER_c~0,MONOMER0_2488_c~2)  k_nuc_CPLX0_3930_c
    Growing_CPLX0_3930_c(EG10320_MONOMER_c~0) + EG10320_MONOMER_c() -> Growing_CPLX0_3930_c(EG10320_MONOMER_c~1)  k_bind
    Growing_CPLX0_3930_c(EG10320_MONOMER_c~1) + EG10320_MONOMER_c() -> Growing_CPLX0_3930_c(EG10320_MONOMER_c~2)  k_bind
    Growing_CPLX0_3930_c(EG10320_MONOMER_c~2) + EG10320_MONOMER_c() -> Growing_CPLX0_3930_c(EG10320_MONOMER_c~3)  k_bind
    Growing_CPLX0_3930_c(EG10320_MONOMER_c~3) + EG10320_MONOMER_c() -> Growing_CPLX0_3930_c(EG10320_MONOMER_c~4)  k_bind
    # Completion
    Growing_CPLX0_3930_c(EG10320_MONOMER_c~4,MONOMER0_2488_c~2) -> CPLX0_3930_c()  k_completion

    # === flagellar motor switch reaction ===
    # Product: CPLX0-7450[i]
    # Subunits: 34x FLIF-FLAGELLAR-MS-RING[i], 34x FLIG-FLAGELLAR-SWITCH-PROTEIN[i], 34x FLIM-FLAGELLAR-C-RING-SWITCH[i], 111x FLIN-FLAGELLAR-C-RING-SWITCH[m]
    # Nucleation (rate scaled by 1/total_subunits)
    FLIF_FLAGELLAR_MS_RING_i() + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~2,FLIG_FLAGELLAR_SWITCH_PROTEIN_i~0,FLIM_FLAGELLAR_C_RING_SWITCH_i~0,FLIN_FLAGELLAR_C_RING_SWITCH_m~0)  k_nuc_CPLX0_7450_i
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~2) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~3)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~3) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~4)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~4) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~5)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~5) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~6)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~6) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~7)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~7) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~8)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~8) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~9)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~9) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~10)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~10) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~11)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~11) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~12)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~12) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~13)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~13) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~14)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~14) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~15)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~15) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~16)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~16) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~17)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~17) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~18)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~18) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~19)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~19) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~20)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~20) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~21)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~21) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~22)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~22) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~23)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~23) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~24)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~24) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~25)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~25) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~26)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~26) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~27)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~27) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~28)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~28) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~29)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~29) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~30)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~30) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~31)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~31) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~32)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~32) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~33)  k_bind
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~33) + FLIF_FLAGELLAR_MS_RING_i() -> Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~34)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~0) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~1)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~1) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~2)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~2) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~3)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~3) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~4)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~4) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~5)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~5) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~6)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~6) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~7)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~7) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~8)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~8) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~9)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~9) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~10)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~10) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~11)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~11) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~12)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~12) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~13)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~13) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~14)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~14) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~15)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~15) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~16)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~16) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~17)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~17) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~18)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~18) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~19)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~19) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~20)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~20) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~21)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~21) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~22)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~22) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~23)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~23) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~24)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~24) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~25)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~25) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~26)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~26) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~27)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~27) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~28)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~28) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~29)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~29) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~30)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~30) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~31)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~31) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~32)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~32) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~33)  k_bind
    Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~33) + FLIG_FLAGELLAR_SWITCH_PROTEIN_i() -> Growing_CPLX0_7450_i(FLIG_FLAGELLAR_SWITCH_PROTEIN_i~34)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~0) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~1)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~1) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~2)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~2) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~3)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~3) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~4)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~4) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~5)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~5) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~6)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~6) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~7)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~7) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~8)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~8) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~9)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~9) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~10)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~10) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~11)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~11) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~12)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~12) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~13)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~13) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~14)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~14) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~15)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~15) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~16)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~16) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~17)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~17) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~18)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~18) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~19)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~19) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~20)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~20) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~21)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~21) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~22)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~22) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~23)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~23) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~24)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~24) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~25)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~25) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~26)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~26) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~27)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~27) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~28)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~28) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~29)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~29) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~30)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~30) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~31)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~31) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~32)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~32) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~33)  k_bind
    Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~33) + FLIM_FLAGELLAR_C_RING_SWITCH_i() -> Growing_CPLX0_7450_i(FLIM_FLAGELLAR_C_RING_SWITCH_i~34)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~0) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~1)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~1) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~2)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~2) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~3)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~3) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~4)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~4) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~5)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~5) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~6)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~6) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~7)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~7) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~8)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~8) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~9)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~9) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~10)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~10) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~11)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~11) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~12)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~12) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~13)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~13) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~14)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~14) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~15)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~15) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~16)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~16) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~17)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~17) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~18)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~18) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~19)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~19) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~20)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~20) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~21)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~21) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~22)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~22) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~23)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~23) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~24)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~24) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~25)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~25) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~26)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~26) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~27)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~27) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~28)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~28) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~29)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~29) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~30)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~30) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~31)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~31) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~32)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~32) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~33)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~33) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~34)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~34) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~35)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~35) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~36)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~36) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~37)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~37) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~38)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~38) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~39)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~39) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~40)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~40) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~41)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~41) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~42)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~42) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~43)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~43) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~44)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~44) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~45)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~45) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~46)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~46) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~47)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~47) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~48)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~48) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~49)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~49) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~50)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~50) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~51)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~51) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~52)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~52) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~53)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~53) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~54)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~54) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~55)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~55) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~56)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~56) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~57)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~57) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~58)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~58) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~59)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~59) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~60)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~60) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~61)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~61) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~62)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~62) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~63)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~63) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~64)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~64) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~65)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~65) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~66)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~66) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~67)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~67) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~68)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~68) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~69)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~69) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~70)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~70) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~71)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~71) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~72)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~72) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~73)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~73) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~74)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~74) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~75)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~75) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~76)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~76) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~77)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~77) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~78)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~78) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~79)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~79) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~80)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~80) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~81)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~81) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~82)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~82) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~83)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~83) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~84)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~84) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~85)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~85) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~86)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~86) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~87)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~87) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~88)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~88) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~89)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~89) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~90)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~90) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~91)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~91) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~92)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~92) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~93)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~93) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~94)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~94) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~95)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~95) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~96)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~96) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~97)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~97) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~98)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~98) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~99)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~99) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~100)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~100) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~101)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~101) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~102)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~102) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~103)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~103) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~104)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~104) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~105)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~105) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~106)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~106) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~107)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~107) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~108)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~108) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~109)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~109) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~110)  k_bind
    Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~110) + FLIN_FLAGELLAR_C_RING_SWITCH_m() -> Growing_CPLX0_7450_i(FLIN_FLAGELLAR_C_RING_SWITCH_m~111)  k_bind
    # Completion
    Growing_CPLX0_7450_i(FLIF_FLAGELLAR_MS_RING_i~34,FLIG_FLAGELLAR_SWITCH_PROTEIN_i~34,FLIM_FLAGELLAR_C_RING_SWITCH_i~34,FLIN_FLAGELLAR_C_RING_SWITCH_m~111) -> CPLX0_7450_i()  k_completion

    # === flagellar export apparatus reaction 1 ===
    # Product: flagellar export apparatus subunit
    # Subunits: 1x CPLX0-7450[i], 9x G370-MONOMER[i], 1x G7028-MONOMER[i], 1x EG11224-MONOMER[j], 5x EG11975-MONOMER[i], 4x EG11976-MONOMER[j], 1x EG11977-MONOMER[i], 1x G378-MONOMER[c], 6x G377-MONOMER[c]
    # Nucleation (rate scaled by 1/total_subunits)
    CPLX0_7450_i() + G7028_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(CPLX0_7450_i~1,EG11224_MONOMER_j~0,EG11975_MONOMER_i~0,EG11976_MONOMER_j~0,EG11977_MONOMER_i~0,G370_MONOMER_i~0,G377_MONOMER_c~0,G378_MONOMER_c~0,G7028_MONOMER_i~1)  k_nuc_flagellar_export_apparatus_subunit
    Growing_flagellar_export_apparatus_subunit(EG11224_MONOMER_j~0) + EG11224_MONOMER_j() -> Growing_flagellar_export_apparatus_subunit(EG11224_MONOMER_j~1)  k_bind
    Growing_flagellar_export_apparatus_subunit(EG11975_MONOMER_i~0) + EG11975_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(EG11975_MONOMER_i~1)  k_bind
    Growing_flagellar_export_apparatus_subunit(EG11975_MONOMER_i~1) + EG11975_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(EG11975_MONOMER_i~2)  k_bind
    Growing_flagellar_export_apparatus_subunit(EG11975_MONOMER_i~2) + EG11975_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(EG11975_MONOMER_i~3)  k_bind
    Growing_flagellar_export_apparatus_subunit(EG11975_MONOMER_i~3) + EG11975_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(EG11975_MONOMER_i~4)  k_bind
    Growing_flagellar_export_apparatus_subunit(EG11975_MONOMER_i~4) + EG11975_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(EG11975_MONOMER_i~5)  k_bind
    Growing_flagellar_export_apparatus_subunit(EG11976_MONOMER_j~0) + EG11976_MONOMER_j() -> Growing_flagellar_export_apparatus_subunit(EG11976_MONOMER_j~1)  k_bind
    Growing_flagellar_export_apparatus_subunit(EG11976_MONOMER_j~1) + EG11976_MONOMER_j() -> Growing_flagellar_export_apparatus_subunit(EG11976_MONOMER_j~2)  k_bind
    Growing_flagellar_export_apparatus_subunit(EG11976_MONOMER_j~2) + EG11976_MONOMER_j() -> Growing_flagellar_export_apparatus_subunit(EG11976_MONOMER_j~3)  k_bind
    Growing_flagellar_export_apparatus_subunit(EG11976_MONOMER_j~3) + EG11976_MONOMER_j() -> Growing_flagellar_export_apparatus_subunit(EG11976_MONOMER_j~4)  k_bind
    Growing_flagellar_export_apparatus_subunit(EG11977_MONOMER_i~0) + EG11977_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(EG11977_MONOMER_i~1)  k_bind
    Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~0) + G370_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~1)  k_bind
    Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~1) + G370_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~2)  k_bind
    Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~2) + G370_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~3)  k_bind
    Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~3) + G370_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~4)  k_bind
    Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~4) + G370_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~5)  k_bind
    Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~5) + G370_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~6)  k_bind
    Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~6) + G370_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~7)  k_bind
    Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~7) + G370_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~8)  k_bind
    Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~8) + G370_MONOMER_i() -> Growing_flagellar_export_apparatus_subunit(G370_MONOMER_i~9)  k_bind
    Growing_flagellar_export_apparatus_subunit(G377_MONOMER_c~0) + G377_MONOMER_c() -> Growing_flagellar_export_apparatus_subunit(G377_MONOMER_c~1)  k_bind
    Growing_flagellar_export_apparatus_subunit(G377_MONOMER_c~1) + G377_MONOMER_c() -> Growing_flagellar_export_apparatus_subunit(G377_MONOMER_c~2)  k_bind
    Growing_flagellar_export_apparatus_subunit(G377_MONOMER_c~2) + G377_MONOMER_c() -> Growing_flagellar_export_apparatus_subunit(G377_MONOMER_c~3)  k_bind
    Growing_flagellar_export_apparatus_subunit(G377_MONOMER_c~3) + G377_MONOMER_c() -> Growing_flagellar_export_apparatus_subunit(G377_MONOMER_c~4)  k_bind
    Growing_flagellar_export_apparatus_subunit(G377_MONOMER_c~4) + G377_MONOMER_c() -> Growing_flagellar_export_apparatus_subunit(G377_MONOMER_c~5)  k_bind
    Growing_flagellar_export_apparatus_subunit(G377_MONOMER_c~5) + G377_MONOMER_c() -> Growing_flagellar_export_apparatus_subunit(G377_MONOMER_c~6)  k_bind
    Growing_flagellar_export_apparatus_subunit(G378_MONOMER_c~0) + G378_MONOMER_c() -> Growing_flagellar_export_apparatus_subunit(G378_MONOMER_c~1)  k_bind
    # Completion
    Growing_flagellar_export_apparatus_subunit(CPLX0_7450_i~1,EG11224_MONOMER_j~1,EG11975_MONOMER_i~5,EG11976_MONOMER_j~4,EG11977_MONOMER_i~1,G370_MONOMER_i~9,G377_MONOMER_c~6,G378_MONOMER_c~1,G7028_MONOMER_i~1) -> flagellar_export_apparatus_subunit()  k_completion

    # === flagellar export apparatus reaction 2 ===
    # Product: CPLX0-7451[j]
    # Subunits: 1x flagellar export apparatus subunit, 12x EG11656-MONOMER[c]
    # Nucleation (rate scaled by 1/total_subunits)
    flagellar_export_apparatus_subunit() + EG11656_MONOMER_c() -> Growing_CPLX0_7451_j(EG11656_MONOMER_c~1,flagellar_export_apparatus_subunit~1)  k_nuc_CPLX0_7451_j
    Growing_CPLX0_7451_j(EG11656_MONOMER_c~1) + EG11656_MONOMER_c() -> Growing_CPLX0_7451_j(EG11656_MONOMER_c~2)  k_bind
    Growing_CPLX0_7451_j(EG11656_MONOMER_c~2) + EG11656_MONOMER_c() -> Growing_CPLX0_7451_j(EG11656_MONOMER_c~3)  k_bind
    Growing_CPLX0_7451_j(EG11656_MONOMER_c~3) + EG11656_MONOMER_c() -> Growing_CPLX0_7451_j(EG11656_MONOMER_c~4)  k_bind
    Growing_CPLX0_7451_j(EG11656_MONOMER_c~4) + EG11656_MONOMER_c() -> Growing_CPLX0_7451_j(EG11656_MONOMER_c~5)  k_bind
    Growing_CPLX0_7451_j(EG11656_MONOMER_c~5) + EG11656_MONOMER_c() -> Growing_CPLX0_7451_j(EG11656_MONOMER_c~6)  k_bind
    Growing_CPLX0_7451_j(EG11656_MONOMER_c~6) + EG11656_MONOMER_c() -> Growing_CPLX0_7451_j(EG11656_MONOMER_c~7)  k_bind
    Growing_CPLX0_7451_j(EG11656_MONOMER_c~7) + EG11656_MONOMER_c() -> Growing_CPLX0_7451_j(EG11656_MONOMER_c~8)  k_bind
    Growing_CPLX0_7451_j(EG11656_MONOMER_c~8) + EG11656_MONOMER_c() -> Growing_CPLX0_7451_j(EG11656_MONOMER_c~9)  k_bind
    Growing_CPLX0_7451_j(EG11656_MONOMER_c~9) + EG11656_MONOMER_c() -> Growing_CPLX0_7451_j(EG11656_MONOMER_c~10)  k_bind
    Growing_CPLX0_7451_j(EG11656_MONOMER_c~10) + EG11656_MONOMER_c() -> Growing_CPLX0_7451_j(EG11656_MONOMER_c~11)  k_bind
    Growing_CPLX0_7451_j(EG11656_MONOMER_c~11) + EG11656_MONOMER_c() -> Growing_CPLX0_7451_j(EG11656_MONOMER_c~12)  k_bind
    # Completion
    Growing_CPLX0_7451_j(EG11656_MONOMER_c~12,flagellar_export_apparatus_subunit~1) -> CPLX0_7451_j()  k_completion

    # === flagellar motor reaction ===
    # Product: FLAGELLAR-MOTOR-COMPLEX[j]
    # Subunits: 1x CPLX0-7451[j], 2x EG10322-MONOMER[j], 26x FLGH-FLAGELLAR-L-RING[j], 55x MOTA-FLAGELLAR-MOTOR-STATOR-PROTEIN[i], 22x MOTB-FLAGELLAR-MOTOR-STATOR-PROTEIN[i], 5x FLGB-FLAGELLAR-MOTOR-ROD-PROTEIN[j], 6x FLGC-FLAGELLAR-MOTOR-ROD-PROTEIN[j], 5x FLGF-FLAGELLAR-MOTOR-ROD-PROTEIN[j], 24x FLGG-FLAGELLAR-MOTOR-ROD-PROTEIN[o], 26x FLGI-FLAGELLAR-P-RING[j], 6x EG11346-MONOMER[p]
    # Nucleation (rate scaled by 1/total_subunits)
    CPLX0_7451_j() + EG10322_MONOMER_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(CPLX0_7451_j~1,EG10322_MONOMER_j~1,EG11346_MONOMER_p~0,FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j~0,FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j~0,FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j~0,FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~0,FLGH_FLAGELLAR_L_RING_j~0,FLGI_FLAGELLAR_P_RING_j~0,MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~0,MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~0)  k_nuc_FLAGELLAR_MOTOR_COMPLEX_j
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(EG10322_MONOMER_j~1) + EG10322_MONOMER_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(EG10322_MONOMER_j~2)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(EG11346_MONOMER_p~0) + EG11346_MONOMER_p() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(EG11346_MONOMER_p~1)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(EG11346_MONOMER_p~1) + EG11346_MONOMER_p() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(EG11346_MONOMER_p~2)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(EG11346_MONOMER_p~2) + EG11346_MONOMER_p() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(EG11346_MONOMER_p~3)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(EG11346_MONOMER_p~3) + EG11346_MONOMER_p() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(EG11346_MONOMER_p~4)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(EG11346_MONOMER_p~4) + EG11346_MONOMER_p() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(EG11346_MONOMER_p~5)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(EG11346_MONOMER_p~5) + EG11346_MONOMER_p() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(EG11346_MONOMER_p~6)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j~0) + FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j~1)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j~1) + FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j~2)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j~2) + FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j~3)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j~3) + FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j~4)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j~4) + FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j~5)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j~0) + FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j~1)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j~1) + FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j~2)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j~2) + FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j~3)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j~3) + FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j~4)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j~4) + FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j~5)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j~5) + FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j~6)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j~0) + FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j~1)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j~1) + FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j~2)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j~2) + FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j~3)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j~3) + FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j~4)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j~4) + FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j~5)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~0) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~1)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~1) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~2)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~2) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~3)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~3) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~4)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~4) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~5)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~5) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~6)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~6) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~7)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~7) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~8)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~8) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~9)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~9) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~10)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~10) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~11)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~11) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~12)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~12) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~13)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~13) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~14)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~14) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~15)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~15) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~16)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~16) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~17)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~17) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~18)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~18) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~19)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~19) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~20)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~20) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~21)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~21) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~22)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~22) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~23)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~23) + FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~24)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~0) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~1)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~1) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~2)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~2) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~3)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~3) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~4)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~4) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~5)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~5) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~6)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~6) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~7)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~7) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~8)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~8) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~9)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~9) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~10)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~10) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~11)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~11) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~12)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~12) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~13)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~13) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~14)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~14) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~15)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~15) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~16)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~16) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~17)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~17) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~18)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~18) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~19)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~19) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~20)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~20) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~21)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~21) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~22)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~22) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~23)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~23) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~24)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~24) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~25)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~25) + FLGH_FLAGELLAR_L_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGH_FLAGELLAR_L_RING_j~26)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~0) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~1)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~1) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~2)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~2) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~3)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~3) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~4)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~4) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~5)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~5) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~6)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~6) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~7)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~7) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~8)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~8) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~9)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~9) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~10)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~10) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~11)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~11) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~12)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~12) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~13)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~13) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~14)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~14) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~15)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~15) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~16)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~16) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~17)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~17) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~18)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~18) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~19)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~19) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~20)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~20) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~21)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~21) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~22)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~22) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~23)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~23) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~24)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~24) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~25)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~25) + FLGI_FLAGELLAR_P_RING_j() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(FLGI_FLAGELLAR_P_RING_j~26)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~0) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~1)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~1) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~2)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~2) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~3)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~3) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~4)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~4) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~5)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~5) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~6)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~6) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~7)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~7) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~8)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~8) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~9)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~9) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~10)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~10) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~11)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~11) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~12)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~12) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~13)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~13) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~14)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~14) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~15)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~15) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~16)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~16) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~17)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~17) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~18)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~18) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~19)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~19) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~20)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~20) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~21)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~21) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~22)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~22) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~23)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~23) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~24)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~24) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~25)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~25) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~26)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~26) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~27)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~27) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~28)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~28) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~29)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~29) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~30)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~30) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~31)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~31) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~32)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~32) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~33)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~33) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~34)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~34) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~35)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~35) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~36)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~36) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~37)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~37) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~38)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~38) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~39)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~39) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~40)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~40) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~41)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~41) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~42)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~42) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~43)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~43) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~44)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~44) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~45)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~45) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~46)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~46) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~47)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~47) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~48)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~48) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~49)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~49) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~50)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~50) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~51)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~51) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~52)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~52) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~53)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~53) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~54)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~54) + MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~55)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~0) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~1)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~1) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~2)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~2) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~3)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~3) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~4)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~4) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~5)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~5) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~6)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~6) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~7)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~7) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~8)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~8) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~9)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~9) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~10)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~10) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~11)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~11) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~12)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~12) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~13)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~13) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~14)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~14) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~15)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~15) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~16)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~16) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~17)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~17) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~18)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~18) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~19)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~19) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~20)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~20) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~21)  k_bind
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~21) + MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i() -> Growing_FLAGELLAR_MOTOR_COMPLEX_j(MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~22)  k_bind
    # Completion
    Growing_FLAGELLAR_MOTOR_COMPLEX_j(CPLX0_7451_j~1,EG10322_MONOMER_j~2,EG11346_MONOMER_p~6,FLGB_FLAGELLAR_MOTOR_ROD_PROTEIN_j~5,FLGC_FLAGELLAR_MOTOR_ROD_PROTEIN_j~6,FLGF_FLAGELLAR_MOTOR_ROD_PROTEIN_j~5,FLGG_FLAGELLAR_MOTOR_ROD_PROTEIN_o~24,FLGH_FLAGELLAR_L_RING_j~26,FLGI_FLAGELLAR_P_RING_j~26,MOTA_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~55,MOTB_FLAGELLAR_MOTOR_STATOR_PROTEIN_i~22) -> FLAGELLAR_MOTOR_COMPLEX_j()  k_completion

    # === flagellar hook reaction ===
    # Product: flagellar hook
    # Subunits: 120x G361-MONOMER[c]
    # Nucleation (rate scaled by 1/total_subunits)
    G361_MONOMER_c() + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~2)  k_nuc_flagellar_hook
    Growing_flagellar_hook(G361_MONOMER_c~2) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~3)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~3) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~4)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~4) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~5)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~5) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~6)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~6) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~7)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~7) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~8)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~8) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~9)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~9) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~10)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~10) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~11)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~11) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~12)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~12) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~13)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~13) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~14)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~14) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~15)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~15) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~16)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~16) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~17)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~17) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~18)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~18) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~19)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~19) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~20)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~20) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~21)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~21) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~22)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~22) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~23)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~23) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~24)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~24) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~25)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~25) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~26)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~26) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~27)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~27) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~28)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~28) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~29)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~29) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~30)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~30) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~31)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~31) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~32)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~32) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~33)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~33) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~34)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~34) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~35)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~35) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~36)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~36) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~37)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~37) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~38)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~38) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~39)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~39) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~40)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~40) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~41)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~41) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~42)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~42) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~43)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~43) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~44)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~44) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~45)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~45) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~46)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~46) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~47)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~47) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~48)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~48) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~49)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~49) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~50)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~50) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~51)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~51) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~52)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~52) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~53)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~53) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~54)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~54) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~55)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~55) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~56)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~56) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~57)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~57) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~58)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~58) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~59)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~59) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~60)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~60) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~61)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~61) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~62)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~62) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~63)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~63) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~64)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~64) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~65)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~65) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~66)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~66) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~67)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~67) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~68)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~68) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~69)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~69) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~70)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~70) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~71)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~71) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~72)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~72) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~73)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~73) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~74)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~74) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~75)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~75) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~76)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~76) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~77)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~77) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~78)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~78) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~79)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~79) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~80)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~80) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~81)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~81) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~82)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~82) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~83)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~83) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~84)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~84) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~85)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~85) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~86)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~86) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~87)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~87) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~88)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~88) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~89)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~89) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~90)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~90) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~91)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~91) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~92)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~92) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~93)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~93) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~94)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~94) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~95)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~95) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~96)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~96) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~97)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~97) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~98)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~98) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~99)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~99) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~100)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~100) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~101)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~101) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~102)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~102) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~103)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~103) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~104)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~104) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~105)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~105) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~106)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~106) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~107)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~107) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~108)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~108) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~109)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~109) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~110)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~110) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~111)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~111) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~112)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~112) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~113)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~113) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~114)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~114) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~115)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~115) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~116)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~116) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~117)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~117) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~118)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~118) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~119)  k_bind
    Growing_flagellar_hook(G361_MONOMER_c~119) + G361_MONOMER_c() -> Growing_flagellar_hook(G361_MONOMER_c~120)  k_bind
    # Completion
    Growing_flagellar_hook(G361_MONOMER_c~120) -> flagellar_hook()  k_completion

    # === flagellum reaction ===
    # Product: flagella
    # Subunits: 1x FLAGELLAR-MOTOR-COMPLEX[j], 11x EG11545-MONOMER[e], 11x EG11967-MONOMER[e], 5x EG10841-MONOMER[e], 1x flagellar hook
    # Nucleation (rate scaled by 1/total_subunits)
    FLAGELLAR_MOTOR_COMPLEX_j() + flagellar_hook() -> Growing_flagella(EG10841_MONOMER_e~0,EG11545_MONOMER_e~0,EG11967_MONOMER_e~0,FLAGELLAR_MOTOR_COMPLEX_j~1,flagellar_hook~1)  k_nuc_flagella
    Growing_flagella(EG10841_MONOMER_e~0) + EG10841_MONOMER_e() -> Growing_flagella(EG10841_MONOMER_e~1)  k_bind
    Growing_flagella(EG10841_MONOMER_e~1) + EG10841_MONOMER_e() -> Growing_flagella(EG10841_MONOMER_e~2)  k_bind
    Growing_flagella(EG10841_MONOMER_e~2) + EG10841_MONOMER_e() -> Growing_flagella(EG10841_MONOMER_e~3)  k_bind
    Growing_flagella(EG10841_MONOMER_e~3) + EG10841_MONOMER_e() -> Growing_flagella(EG10841_MONOMER_e~4)  k_bind
    Growing_flagella(EG10841_MONOMER_e~4) + EG10841_MONOMER_e() -> Growing_flagella(EG10841_MONOMER_e~5)  k_bind
    Growing_flagella(EG11545_MONOMER_e~0) + EG11545_MONOMER_e() -> Growing_flagella(EG11545_MONOMER_e~1)  k_bind
    Growing_flagella(EG11545_MONOMER_e~1) + EG11545_MONOMER_e() -> Growing_flagella(EG11545_MONOMER_e~2)  k_bind
    Growing_flagella(EG11545_MONOMER_e~2) + EG11545_MONOMER_e() -> Growing_flagella(EG11545_MONOMER_e~3)  k_bind
    Growing_flagella(EG11545_MONOMER_e~3) + EG11545_MONOMER_e() -> Growing_flagella(EG11545_MONOMER_e~4)  k_bind
    Growing_flagella(EG11545_MONOMER_e~4) + EG11545_MONOMER_e() -> Growing_flagella(EG11545_MONOMER_e~5)  k_bind
    Growing_flagella(EG11545_MONOMER_e~5) + EG11545_MONOMER_e() -> Growing_flagella(EG11545_MONOMER_e~6)  k_bind
    Growing_flagella(EG11545_MONOMER_e~6) + EG11545_MONOMER_e() -> Growing_flagella(EG11545_MONOMER_e~7)  k_bind
    Growing_flagella(EG11545_MONOMER_e~7) + EG11545_MONOMER_e() -> Growing_flagella(EG11545_MONOMER_e~8)  k_bind
    Growing_flagella(EG11545_MONOMER_e~8) + EG11545_MONOMER_e() -> Growing_flagella(EG11545_MONOMER_e~9)  k_bind
    Growing_flagella(EG11545_MONOMER_e~9) + EG11545_MONOMER_e() -> Growing_flagella(EG11545_MONOMER_e~10)  k_bind
    Growing_flagella(EG11545_MONOMER_e~10) + EG11545_MONOMER_e() -> Growing_flagella(EG11545_MONOMER_e~11)  k_bind
    Growing_flagella(EG11967_MONOMER_e~0) + EG11967_MONOMER_e() -> Growing_flagella(EG11967_MONOMER_e~1)  k_bind
    Growing_flagella(EG11967_MONOMER_e~1) + EG11967_MONOMER_e() -> Growing_flagella(EG11967_MONOMER_e~2)  k_bind
    Growing_flagella(EG11967_MONOMER_e~2) + EG11967_MONOMER_e() -> Growing_flagella(EG11967_MONOMER_e~3)  k_bind
    Growing_flagella(EG11967_MONOMER_e~3) + EG11967_MONOMER_e() -> Growing_flagella(EG11967_MONOMER_e~4)  k_bind
    Growing_flagella(EG11967_MONOMER_e~4) + EG11967_MONOMER_e() -> Growing_flagella(EG11967_MONOMER_e~5)  k_bind
    Growing_flagella(EG11967_MONOMER_e~5) + EG11967_MONOMER_e() -> Growing_flagella(EG11967_MONOMER_e~6)  k_bind
    Growing_flagella(EG11967_MONOMER_e~6) + EG11967_MONOMER_e() -> Growing_flagella(EG11967_MONOMER_e~7)  k_bind
    Growing_flagella(EG11967_MONOMER_e~7) + EG11967_MONOMER_e() -> Growing_flagella(EG11967_MONOMER_e~8)  k_bind
    Growing_flagella(EG11967_MONOMER_e~8) + EG11967_MONOMER_e() -> Growing_flagella(EG11967_MONOMER_e~9)  k_bind
    Growing_flagella(EG11967_MONOMER_e~9) + EG11967_MONOMER_e() -> Growing_flagella(EG11967_MONOMER_e~10)  k_bind
    Growing_flagella(EG11967_MONOMER_e~10) + EG11967_MONOMER_e() -> Growing_flagella(EG11967_MONOMER_e~11)  k_bind
    # Completion
    Growing_flagella(EG10841_MONOMER_e~5,EG11545_MONOMER_e~11,EG11967_MONOMER_e~11,FLAGELLAR_MOTOR_COMPLEX_j~1,flagellar_hook~1) -> flagella()  k_completion

end reaction rules

end model